//execute1("celltypes.element(\"Cell\")")

begintemplate Cell
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo
public synlist, x, y, z, position, connect2target

public soma, dend
public all, somatic, basal

objref synlist

proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  synlist = new List()
  synapses()
  x = y = z = 0 // only change via position
}

create soma, dend[119]

proc topol() { local i
  connect dend(0), soma(0)
  for i = 1, 8 connect dend[i](0), dend[i-1](1)
  connect dend[9](0), dend[7](1)
  connect dend[10](0), dend[6](1)
  connect dend[11](0), dend[5](1)
  connect dend[12](0), dend[4](1)
  for i = 13, 14 connect dend[i](0), dend[i-1](1)
  connect dend[15](0), dend[13](1)
  connect dend[16](0), dend[12](1)
  for i = 17, 18 connect dend[i](0), dend[i-1](1)
  connect dend[19](0), dend[17](1)
  connect dend[20](0), dend[16](1)
  connect dend[21](0), dend[3](1)
  for i = 22, 24 connect dend[i](0), dend[i-1](1)
  connect dend[25](0), dend[23](1)
  connect dend[26](0), dend[22](1)
  connect dend[27](0), dend[21](1)
  connect dend[28](0), dend[2](1)
  for i = 29, 32 connect dend[i](0), dend[i-1](1)
  connect dend[33](0), dend[31](1)
  for i = 34, 35 connect dend[i](0), dend[33](1)
  connect dend[36](0), dend[30](1)
  for i = 37, 38 connect dend[i](0), dend[36](1)
  for i = 39, 40 connect dend[i](0), dend[38](1)
  connect dend[41](0), dend[29](1)
  connect dend[42](0), dend[28](1)
  for i = 43, 44 connect dend[i](0), dend[42](1)
  connect dend[45](0), dend[1](1)
  for i = 46, 47 connect dend[i](0), dend[i-1](1)
  connect dend[48](0), dend[46](1)
  connect dend[49](0), dend[45](1)
  connect dend[50](0), dend(1)
  for i = 51, 52 connect dend[i](0), dend[50](1)
  for i = 53, 54 connect dend[i](0), dend[52](1)
  for i = 55, 59 connect dend[i](0), dend[i-1](1)
  connect dend[60](0), dend[58](1)
  connect dend[61](0), dend[57](1)
  for i = 62, 63 connect dend[i](0), dend[61](1)
  for i = 64, 65 connect dend[i](0), dend[63](1)
  connect dend[66](0), dend[56](1)
  for i = 67, 68 connect dend[i](0), dend[66](1)
  connect dend[69](0), dend[55](1)
  for i = 70, 72 connect dend[i](0), dend[i-1](1)
  connect dend[73](0), dend[71](1)
  connect dend[74](0), dend[70](1)
  connect dend[75](0), dend[69](1)
  for i = 76, 77 connect dend[i](0), dend[75](1)
  connect dend[78](0), dend[54](1)
  for i = 79, 80 connect dend[i](0), dend[78](1)
  connect dend[81](0), soma(0.5)
  for i = 82, 83 connect dend[i](0), dend[81](1)
  for i = 84, 85 connect dend[i](0), dend[i-1](1)
  connect dend[86](0), dend[84](1)
  connect dend[87](0), dend[83](1)
  for i = 88, 89 connect dend[i](0), dend[i-1](1)
  connect dend[90](0), dend[88](1)
  for i = 91, 92 connect dend[i](0), dend[i-1](1)
  connect dend[93](0), dend[91](1)
  connect dend[94](0), dend[90](1)
  connect dend[95](0), dend[87](1)
  for i = 96, 97 connect dend[i](0), dend[i-1](1)
  connect dend[98](0), dend[96](1)
  for i = 99, 100 connect dend[i](0), dend[98](1)
  connect dend[101](0), dend[95](1)
  for i = 102, 103 connect dend[i](0), dend[i-1](1)
  connect dend[104](0), dend[102](1)
  connect dend[105](0), dend[101](1)
  connect dend[106](0), soma(0.5)
  for i = 107, 108 connect dend[i](0), dend[i-1](1)
  connect dend[109](0), dend[107](1)
  for i = 110, 111 connect dend[i](0), dend[109](1)
  connect dend[112](0), dend[106](1)
  for i = 113, 114 connect dend[i](0), dend[112](1)
  for i = 115, 116 connect dend[i](0), dend[i-1](1)
  connect dend[117](0), dend[115](1)
  connect dend[118](0), dend[114](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-11.94, 0, 0, 20)
	pt3dadd(-11.94, 0, 10, 20)
	pt3dadd(-11.94, 0, 20, 20)
  }
  dend {pt3dclear()
	pt3dadd(-2.7, 2.05, 8, 8.61)
	pt3dadd(-7.56, 13.25, -6.5, 8.61)
	pt3dadd(-8.8, 15.06, -7, 7.16)
	pt3dadd(-10.06, 18.24, -7, 7.74)
	pt3dadd(-12.9, 19.69, -7.5, 8.81)
	pt3dadd(-15.62, 21.38, -7.5, 10.26)
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  }
}
proc shape3d_2() {
  dend[8] {	pt3dadd(-73.25, 93.93, -6.5, 1.23)
	pt3dadd(-73.93, 94.2, -7, 1.81)
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  }
}
proc shape3d_3() {
  dend[15] {	pt3dadd(-70.49, 29.34, -5.5, 0.27)
	pt3dadd(-70.69, 29.23, -5.5, 0.36)
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  }
}
proc shape3d_4() {
  dend[20] {	pt3dadd(-92.56, 27.71, -5, 0.92)
	pt3dadd(-92.79, 27.71, -5, 0.7)
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  }
}
proc shape3d_5() {
  dend[25] {	pt3dadd(-58.63, 107.55, -7, 4.6)
	pt3dadd(-58.68, 108.05, -7, 4.09)
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  }
}
proc shape3d_6() {
  dend[27] {	pt3dadd(-29.59, 79.22, -5.5, 0.05)
	pt3dadd(-29.27, 79.29, -5.5, 0.27)
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  }
}
proc shape3d_7() {
  dend[32] {	pt3dadd(7.51, 100.06, -6.5, 0.94)
	pt3dadd(7.74, 100.06, -6.5, 0.9)
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  }
}
proc shape3d_8() {
  dend[39] {	pt3dadd(-22.62, 67.31, -5, 0.3)
	pt3dadd(-22.62, 67.11, -5, 0.4)
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  }
}
proc shape3d_9() {
  dend[45] {	pt3dadd(-33.03, 26.77, -6, 0.82)
	pt3dadd(-33.26, 26.76, -6, 0.7)
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  }
}
proc shape3d_10() {
  dend[48] {	pt3dadd(-71.62, 10.08, -5.5, 0.63)
	pt3dadd(-72.17, 9.8, -5.5, 0.51)
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  }
}
proc shape3d_11() {
  dend[51] {	pt3dadd(-26.93, 22.45, -8.5, 1.74)
	pt3dadd(-27.18, 22.78, -8.5, 1.23)
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  }
}
proc shape3d_12() {
  dend[59] {	pt3dadd(-3.05, -49.72, -9.5, 0.1)
	pt3dadd(-2.59, -49.93, -9.5, 0.1)
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  }
}
proc shape3d_13() {
  dend[60] {	pt3dadd(-17.46, -43.86, -11.5, 0.82)
	pt3dadd(-17.54, -44.23, -11.5, 0.7)
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  }
}
proc shape3d_14() {
  dend[63] {	pt3dadd(-42.39, -49.66, -9.5, 0.52)
	pt3dadd(-42.49, -49.92, -9.5, 0.57)
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  }
}
proc shape3d_15() {
  dend[66] {	pt3dadd(-10.38, -14.12, -8, 0.87)
	pt3dadd(-10.26, -13.79, -8, 0.71)
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  }
}
proc shape3d_16() {
  dend[70] {	pt3dadd(-46.42, -22.06, -7.5, 0.36)
	pt3dadd(-46.77, -22.12, -7.5, 0.39)
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  }
}
proc shape3d_17() {
  dend[74] {	pt3dadd(-52.4, -43.62, -8, 0.29)
	pt3dadd(-52.43, -43.88, -8, 0.29)
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  }
}
proc shape3d_18() {
  dend[80] {	pt3dadd(-62.6, -0.09, -5.5, 0.24)
	pt3dadd(-62.98, 0.01, -5.5, 0.24)
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  }
}
proc shape3d_19() {
  dend[86] {	pt3dadd(6.57, 47.13, -6.5, 1.06)
	pt3dadd(6.35, 47.05, -6.5, 1.11)
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  }
}
proc shape3d_20() {
  dend[91] {	pt3dadd(18.64, 75.2, -7, 0.82)
	pt3dadd(18.42, 75.36, -7, 0.48)
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  }
}
proc shape3d_21() {
  dend[96] {	pt3dadd(40.82, 38.8, -8, 0.58)
	pt3dadd(40.84, 39.34, -8, 0.68)
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  }
}
proc shape3d_22() {
  dend[100] {	pt3dadd(55.76, 85.99, -8, 2.08)
  }
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  }
}
proc shape3d_23() {
  dend[106] {	pt3dadd(10.96, -2.75, -5.5, 0.77)
	pt3dadd(11.34, -2.74, -6, 0.77)
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  }
}
proc shape3d_24() {
  dend[113] {	pt3dadd(40.49, -20.57, -8, 0.34)
	pt3dadd(40.73, -20.82, -8, 0.34)
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  }
}
proc shape3d_25() {
  dend[117] {	pt3dadd(43.97, -9.08, -7.5, 0.6)
	pt3dadd(44.64, -9.26, -7.5, 0.87)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
}

objref all, somatic, basal
proc subsets() { local i
  objref all, somatic, basal
  all = new SectionList()
    soma all.append()
    for i=0, 118 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  basal = new SectionList()
    for i=0, 118 dend[i] basal.append()

}
proc geom() {
}
external lambda_f
proc geom_nseg() {
}
proc biophys() {
}
proc biophys_inhomo(){}
proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}
proc synapses() {}
endtemplate Cell
